;Stimulus-Induced Rotary Saturation (SIRS) PLUS EPI
; Note: add some references

#include <Avance.incl>

#include <MRI.include>



; must define delay values here


;ACTUAL PULSE PROGRAM
1 ze  
2 d1 
  p1 ph1
  d2
  10mp ph2 % Fixed length pulse up: microseconds, mp: milliseconds, sp: seconds
  d2
  p1 ph2
  go=2 ph31
;START ECHO PLANAR IMAGING HERE
exit


;PHASE CYCLING
ph1= 0
ph2= 3 ; direction of the SL pulse
ph3= 2
ph31=0 0 2 2 1 1 3 3


; DEFINITIONS
; ze : reset scan counter and enable the execution of dummy scans
; d1 : relaxation delay; 1-5 * T1
; p1 : f1 channel -  90 degree high power pulse
; d2 : delay before applying the phase-shifted (SL) spin-lock pulse
;10mp: fixed length pulse of 10 milliseconds. SPIN LOCK.... p27*Bs1 ph3 ; should be with an amplitude Bs1
